PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = pilot
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine trial_1
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    CodeComponent code_2
      Code Type = Py
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      Begin Experiment:
        import random

        lucky_winner = random.choice([f'{i}.wav' for i in range(1, 8)])
        # Randomly select the first stimulus
        first_stimulus = random.choice(['0.wav'] + [lucky_winner])

        # Determine the second stimulus (the one not picked initially)
        if first_stimulus == '0.wav':
            second_stimulus = lucky_winner
        else:
            second_stimulus = '0.wav'
        thisExp.addData('first_stimulus', first_stimulus)
        thisExp.addData('second_stimulus', second_stimulus)
      Begin Routine:
        sound_1.setSound(first_stimulus)
        sound_2.setSound(second_stimulus)
        print(first_stimulus)
    SoundComponent sound_1
      sound [set every repeat] = $sound_1
      startVal [time (s)] = 1.25
      stopVal [duration (s)] = 16
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 1.25
      stopVal [duration (s)] = 16
      store = all keys
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    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 17.25
      text = Press SPACE on the 1s and 3s.
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  Routine trial_2
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    SoundComponent sound_2
      sound [set every repeat] = $sound_2
      startVal [time (s)] = 1.25
      stopVal [duration (s)] = 16
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'space'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 1.25
      stopVal [duration (s)] = 16
      store = all keys
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    TextComponent text_9
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 17.25
      text = Press SPACE on the 1s and 3s.
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        print(second_stimulus)
  Routine trial_3
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        lucky_winner_num = int(lucky_winner.split('.')[0])
        lucky_winner_num += 7
        third_stimuli = [f'{i}.wav' for i in range(8, 29)]

        # Find the stimulus where the number is 7 greater
        third_stimulus = f'{lucky_winner_num}.wav'
        third_stimuli.remove(third_stimulus)  # Remove it from the list

        # Shuffle remaining stimuli for random order
        random.shuffle(third_stimuli)

        # Add the selected stimulus first
        third_stimuli.insert(0, third_stimulus)
        special_stimuli = [f'{i}.wav' for i in range(29, 36)]
        random.shuffle(special_stimuli)
        gaps = [2, 6, 10, 13, 17, 21, 24, 28]
        for i in range(0, 7):
            third_stimuli.insert(gaps[i], special_stimuli[i])

        # Store for later use
        thisExp.addData('third_stimuli', third_stimuli)
      Begin Routine:
        current_stimulus = third_stimuli.pop(0)
        sound_3.setSound(current_stimulus)
        print(current_stimulus)
      End Routine:
        if len(third_stimuli) == 0:
            trials.finished = True
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 1.25
      stopVal [duration (s)] = 16
      store = all keys
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    SoundComponent sound_3
      sound [set every repeat] = $sound_3
      startVal [time (s)] = 1.25
      stopVal [duration (s)] = 16.0
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    TextComponent text_10
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 17.25
      text = Press SPACE on the 1s and 3s.
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  Routine text_1
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press ENTER for next trial. 
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    KeyboardComponent key_resp_9
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine text2
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Do you want to go back to the examples and practice again?
        (Y: go back to examples / N: proceed to trials)
    KeyboardComponent key_resp_10
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine text_0
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Instructions

        In this experiment, you will hear a series of sine tones and/or metronome clicks that are in 4/4 i.e. consisted of four beats per bar. The task is to tap on the SPACE bar on the STRONGER beats i.e. count the music as 1, 2, 3, 4 then press it on the 1s and 3s. There is no "correct" way to count the beats, so tap in accordance to however you are inclined to count the music. Also, please try to keep your finger constantly in touch with the space bar.

        Press ENTER when you have finished reading the instructions.
    KeyboardComponent key_resp_4
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine text_0_1
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    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Let us practice with a few examples. (Press ENTER to continue)
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    KeyboardComponent key_resp_5
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine text_0_2
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    KeyboardComponent key_resp_8
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Here is another example (press ENTER to continue)
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  Routine example_1
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    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 1.25
      stopVal [duration (s)] = 16
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    SoundComponent sound_4
      sound [set every repeat] = MHLL.wav
      startVal [time (s)] = 1.25
      stopVal [duration (s)] = 16
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    TextComponent text_12
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 17.25
      text = Press SPACE on the 1s and 3s.
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  Routine example_2
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    SoundComponent sound_5
      sound [set every repeat] = ALS.wav
      startVal [time (s)] = 1.25
      stopVal [duration (s)] = 16
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    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 1.25
      stopVal [duration (s)] = 16
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    TextComponent text_13
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 17.25
      text = Press SPACE on the 1s and 3s.
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  Routine text_3
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Now we will move on to the actual experiment. Press ENTER to begin. 
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    KeyboardComponent key_resp_11
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine y_n
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    CodeComponent code_3
      Code Type = Auto->JS
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      Each Frame:
        if 'n' in key_resp_12.keys:
            example.finished = True
            continueRoutine = False
        elif 'y' in key_resp_12.keys:
            continueRoutine = False
    KeyboardComponent key_resp_12
      allowedKeys = 'y','n'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    TextComponent text_11
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press 'y' to practice again or 'n' to proceed to the actual experiment.
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  Routine end
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    TextComponent text_14
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = This is the end of the experiment. Thank you for your participation. Please exit by pressing ENTER. 
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    KeyboardComponent key_resp_13
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine wait
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    SoundComponent sound_6
      sound [set every repeat] = WN.wav
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
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    TextComponent text_15
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Please wait...
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Flow
  Routine text_0
  LoopInitiator example loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 999
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    Routine text_0_1
    Routine example_1
    Routine wait
    Routine text_0_2
    Routine example_2
    Routine y_n
  LoopTerminator example
  Routine wait
  Routine text_3
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('stimulus', '0.wav'), ('trial_type', 'first')]),
      OrderedDict([('stimulus', '1.wav'), ('trial_type', 'second')]),
      OrderedDict([('stimulus', '2.wav'), ('trial_type', 'second')]),
      OrderedDict([('stimulus', '3.wav'), ('trial_type', 'second')]),
      OrderedDict([('stimulus', '4.wav'), ('trial_type', 'second')]),
      OrderedDict([('stimulus', '5.wav'), ('trial_type', 'second')]),
      OrderedDict([('stimulus', '6.wav'), ('trial_type', 'second')]),
      OrderedDict([('stimulus', '7.wav'), ('trial_type', 'second')]),
      OrderedDict([('stimulus', '8.wav'), ('trial_type', 'third')]),
      OrderedDict([('stimulus', '9.wav'), ('trial_type', 'third')]),
      OrderedDict([('stimulus', '10.wav'), ('trial_type', 'third')]),
      OrderedDict([('stimulus', '11.wav'), ('trial_type', 'third')]),
      OrderedDict([('stimulus', '12.wav'), ('trial_type', 'third')]),
      OrderedDict([('stimulus', '13.wav'), ('trial_type', 'third')]),
      OrderedDict([('stimulus', '14.wav'), ('trial_type', 'third')]),
      OrderedDict([('stimulus', '15.wav'), ('trial_type', 'third')]),
      OrderedDict([('stimulus', '16.wav'), ('trial_type', 'third')]),
      OrderedDict([('stimulus', '17.wav'), ('trial_type', 'third')]),
      OrderedDict([('stimulus', '18.wav'), ('trial_type', 'third')]),
      OrderedDict([('stimulus', '19.wav'), ('trial_type', 'third')]),
      OrderedDict([('stimulus', '20.wav'), ('trial_type', 'third')]),
      OrderedDict([('stimulus', '21.wav'), ('trial_type', 'third')]),
      OrderedDict([('stimulus', '22.wav'), ('trial_type', 'third')]),
      OrderedDict([('stimulus', '23.wav'), ('trial_type', 'third')])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
    Routine trial_1
    Routine wait
    Routine text_1
    Routine trial_2
  LoopTerminator trials_2
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.csv
    loopType = random
    nReps = 28
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    conditions:
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    Routine wait
    Routine text_1
    Routine trial_3
  LoopTerminator trials
  Routine end
