PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = pilot_korean
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial_1
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    CodeComponent code_2
      Code Type = Py
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      Begin Experiment:
        import random

        lucky_winner = random.choice([f'{i}.wav' for i in range(1, 8)])
        # Randomly select the first stimulus
        first_stimulus = random.choice(['0.wav'] + [lucky_winner])

        # Determine the second stimulus (the one not picked initially)
        if first_stimulus == '0.wav':
            second_stimulus = lucky_winner
        else:
            second_stimulus = '0.wav'
        thisExp.addData('first_stimulus', first_stimulus)
        thisExp.addData('second_stimulus', second_stimulus)
      Begin Routine:
        sound_1.setSound(first_stimulus)
        sound_2.setSound(second_stimulus)
        print(first_stimulus)
    SoundComponent sound_1
      sound [set every repeat] = $sound_1
      startVal [time (s)] = 1.25
      stopVal [duration (s)] = 16
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 1.25
      stopVal [duration (s)] = 16
      store = all keys
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    TextComponent text_8
      font = Nanum Gothic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 17.25
      text = 첫 박과 세 번째 박에 스페이스 바를 눌러주세요. 
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  Routine trial_2
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    SoundComponent sound_2
      sound [set every repeat] = $sound_2
      startVal [time (s)] = 1.25
      stopVal [duration (s)] = 16
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'space'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 1.25
      stopVal [duration (s)] = 16
      store = all keys
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    TextComponent text_9
      font = Nanum Gothic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 17.25
      text = 첫 박과 세 번째 박에 스페이스 바를 눌러주세요. 
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        print(second_stimulus)
  Routine trial_3
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        lucky_winner_num = int(lucky_winner.split('.')[0])
        lucky_winner_num += 7
        third_stimuli = [f'{i}.wav' for i in range(8, 29)]

        # Find the stimulus where the number is 7 greater
        third_stimulus = f'{lucky_winner_num}.wav'
        third_stimuli.remove(third_stimulus)  # Remove it from the list

        # Shuffle remaining stimuli for random order
        random.shuffle(third_stimuli)

        # Add the selected stimulus first
        third_stimuli.insert(0, third_stimulus)
        special_stimuli = [f'{i}.wav' for i in range(29, 36)]
        random.shuffle(special_stimuli)
        gaps = [2, 6, 10, 13, 17, 21, 24, 28]
        for i in range(0, 7):
            third_stimuli.insert(gaps[i], special_stimuli[i])

        # Store for later use
        thisExp.addData('third_stimuli', third_stimuli)
      Begin Routine:
        current_stimulus = third_stimuli.pop(0)
        sound_3.setSound(current_stimulus)
        print(current_stimulus)
      End Routine:
        if len(third_stimuli) == 0:
            trials.finished = True
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 1.25
      stopVal [duration (s)] = 16
      store = all keys
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    SoundComponent sound_3
      sound [set every repeat] = $sound_3
      startVal [time (s)] = 1.25
      stopVal [duration (s)] = 16.0
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    TextComponent text_10
      font = Nanum Gothic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 17.25
      text = 첫 박과 세 번째 박에 스페이스 바를 눌러주세요. 
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  Routine text_1
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    TextComponent text
      font = Nanum Gothic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = 다음 시행을 실시하려면 ENTER를 눌러주세요.
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    KeyboardComponent key_resp_9
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine text2
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    TextComponent text_2
      font = Nanum Gothic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        유의사항

        1. 되도록이면 스페이스 바를 박자에 맞춰 누르기 전에 음원을 2~3초는 들어주세요.
        2. 가능하면 스페이스 바에서 손가락을 떼지 말아주세요.

        유의사항을 모두 읽으셨다면 ENTER을 눌러 진행해주세요.
    KeyboardComponent key_resp_10
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine text_0
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    TextComponent text_5
      font = Nanum Gothic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        과제에 대한 설명

        이 실험에서 피험자는 사인파로 구성된 선율과 메트로놈 음성을 듣게 됩니다. 모든 음성 자극들은 4/4박자로 되어 있으며, 이 실험의 과제는 강한 박, 즉 1박과 3박에 맞춰 스페이스 바를 누르는 것입니다. 명확한 정답은 없으므로, 피험자 본인이 첫 박과 세 번째 박이라고 생각되는 시점들에 의거하여 스페이스 바를 누르시면 됩니다.

        설명을 모두 읽으셨다면 ENTER키를 눌러주세요.
    KeyboardComponent key_resp_4
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine text_0_1
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    TextComponent text_6
      font = Nanum Gothic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = 예시 몇 개로 연습해보겠습니다. (ENTER을 눌러 계속 진행하세요)
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    KeyboardComponent key_resp_5
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine text_0_2
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    KeyboardComponent key_resp_8
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_7
      font = Nanum Gothic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = 또 다른 예시입니다. (ENTER를 눌러 진행하세요)
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  Routine example_1
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    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 1.25
      stopVal [duration (s)] = 16
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    SoundComponent sound_4
      sound [set every repeat] = MHLL.wav
      startVal [time (s)] = 1.25
      stopVal [duration (s)] = 16
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    TextComponent text_12
      font = Nanum Gothic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 17.25
      text = 첫 박과 세 번째 박에 스페이스 바를 눌러주세요. 
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  Routine example_2
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    SoundComponent sound_5
      sound [set every repeat] = ALS.wav
      startVal [time (s)] = 1.25
      stopVal [duration (s)] = 16
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    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 1.25
      stopVal [duration (s)] = 16
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    TextComponent text_13
      font = Nanum Gothic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 17.25
      text = 첫 박과 세 번째 박에 스페이스 바를 눌러주세요. 
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  Routine text_3
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    TextComponent text_4
      font = Nanum Gothic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = 이제 실제 실험으로 넘어가겠습니다. ENTER를 눌러 진행해주세요. 
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    KeyboardComponent key_resp_11
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine y_n
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    CodeComponent code_3
      Code Type = Auto->JS
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      Each Frame:
        if 'n' in key_resp_12.keys:
            example.finished = True
            continueRoutine = False
        elif 'y' in key_resp_12.keys:
            continueRoutine = False
    KeyboardComponent key_resp_12
      allowedKeys = 'y','n'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    TextComponent text_11
      font = Nanum Gothic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = 연습용 예시가 다시 제시되길 원하시면 Y를, 본 실험으로 넘어가려면 N을 눌러주세요. 
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  Routine end
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    TextComponent text_14
      font = Nanum Gothic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = 실험이 종료되었습니다. 참여해주셔서 감사합니다. ENTER를 눌러 퇴장해주세요. 
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    KeyboardComponent key_resp_13
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine wait
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    SoundComponent sound_6
      sound [set every repeat] = WN.wav
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
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    TextComponent text_15
      font = Nanum Gothic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = 잠시만 기다려주세요...
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Flow
  Routine text_0
  Routine text2
  LoopInitiator example loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 999
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    Routine text_0_1
    Routine example_1
    Routine wait
    Routine text_0_2
    Routine example_2
    Routine y_n
  LoopTerminator example
  Routine wait
  Routine text_3
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('stimulus', '0.wav'), ('trial_type', 'first')]),
      OrderedDict([('stimulus', '1.wav'), ('trial_type', 'second')]),
      OrderedDict([('stimulus', '2.wav'), ('trial_type', 'second')]),
      OrderedDict([('stimulus', '3.wav'), ('trial_type', 'second')]),
      OrderedDict([('stimulus', '4.wav'), ('trial_type', 'second')]),
      OrderedDict([('stimulus', '5.wav'), ('trial_type', 'second')]),
      OrderedDict([('stimulus', '6.wav'), ('trial_type', 'second')]),
      OrderedDict([('stimulus', '7.wav'), ('trial_type', 'second')]),
      OrderedDict([('stimulus', '8.wav'), ('trial_type', 'third')]),
      OrderedDict([('stimulus', '9.wav'), ('trial_type', 'third')]),
      OrderedDict([('stimulus', '10.wav'), ('trial_type', 'third')]),
      OrderedDict([('stimulus', '11.wav'), ('trial_type', 'third')]),
      OrderedDict([('stimulus', '12.wav'), ('trial_type', 'third')]),
      OrderedDict([('stimulus', '13.wav'), ('trial_type', 'third')]),
      OrderedDict([('stimulus', '14.wav'), ('trial_type', 'third')]),
      OrderedDict([('stimulus', '15.wav'), ('trial_type', 'third')]),
      OrderedDict([('stimulus', '16.wav'), ('trial_type', 'third')]),
      OrderedDict([('stimulus', '17.wav'), ('trial_type', 'third')]),
      OrderedDict([('stimulus', '18.wav'), ('trial_type', 'third')]),
      OrderedDict([('stimulus', '19.wav'), ('trial_type', 'third')]),
      OrderedDict([('stimulus', '20.wav'), ('trial_type', 'third')]),
      OrderedDict([('stimulus', '21.wav'), ('trial_type', 'third')]),
      OrderedDict([('stimulus', '22.wav'), ('trial_type', 'third')]),
      OrderedDict([('stimulus', '23.wav'), ('trial_type', 'third')])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
    Routine trial_1
    Routine wait
    Routine text_1
    Routine trial_2
  LoopTerminator trials_2
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.csv
    loopType = random
    nReps = 28
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    conditions:
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    Routine wait
    Routine text_1
    Routine trial_3
  LoopTerminator trials
  Routine end
